CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*/(?P<SlideName>\d{8}_[A-Z]+_[\d-]+)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:37
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "191")
    Name to assign these images:DNA1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "193")
    Name to assign these images:DNA2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "141")
    Name to assign these images:aSMA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "142")
    Name to assign these images:Synapophysin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "143")
    Name to assign these images:vGlut
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "144")
    Name to assign these images:iC3b
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "145")
    Name to assign these images:FH
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "146")
    Name to assign these images:Iba1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "147")
    Name to assign these images:HLA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "148")
    Name to assign these images:IgA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "149")
    Name to assign these images:CD11
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "150")
    Name to assign these images:Fibrinogen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "151")
    Name to assign these images:IgLambda
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "152")
    Name to assign these images:CD45
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "153")
    Name to assign these images:GFAP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "154")
    Name to assign these images:C9
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "155")
    Name to assign these images:TMEM119
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "156")
    Name to assign these images:NeuN
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "158")
    Name to assign these images:CD59
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "159")
    Name to assign these images:CD68
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "160")
    Name to assign these images:IgKappa
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "161")
    Name to assign these images:CD20
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "162")
    Name to assign these images:CD8a
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "163")
    Name to assign these images:SMI32
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "164")
    Name to assign these images:C1q
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "165")
    Name to assign these images:SOX10
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "166")
    Name to assign these images:C1inh
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "167")
    Name to assign these images:GranzymeB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "169")
    Name to assign these images:Collagen1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "170")
    Name to assign these images:CD3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "171")
    Name to assign these images:MCP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "172")
    Name to assign these images:IgM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "173")
    Name to assign these images:CD31
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "174")
    Name to assign these images:PLP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "175")
    Name to assign these images:vGat
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "176")
    Name to assign these images:CR1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "168")
    Name to assign these images:Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:SlideName

ImageMath:[module_num:5|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:6000
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:DNA1
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:DNA2
    Multiply the second image by:1.0
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
ReduceNoise:[module_num:6|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
    Select the input image:ImageAfterMath
    Name the output image:ReduceNoise
    Size:7
    Distance:11
    Cut-off distance:0.1

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:ReduceNoise
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:ReduceNoise
    Number of pixels by which to expand the primary objects:5
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
MeasureObjectIntensity:[module_num:9|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
    Select images to measure:CD45
    Select objects to measure:Cells

ImageMath:[module_num:10|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:6000
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CD45Increased
    Image or measurement?:Image
    Select the first image:CD45
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CD45
    Multiply the second image by:1.0
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CD45Increased
    Name the output image:CD45celloutline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF0A
    Select objects to display:Cells

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:ImageAfterMath
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA1
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:ReduceNoise
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA2
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:CD45celloutline
    Select method for constructing file names:From image filename
    Select image name for file prefix:CD45
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectIntensity:[module_num:15|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enabled:False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
    Select images to measure:CD11increased, CD20Increased, CD31increased, CD3Increased, CD45increased, CD59increased, CD68increased, CD8aincreased, CR1increased, Collagen1increased, FHincreased, Fibrinogenincreased, GFAPincreased, GranzymeBincreased, HLAincreased, Iba1increased, IgAincreased, IgKappaincreased, IgLambdaincreased, IgMincreased, Ki67increased, MCPincreased, NeuNincreased, PLPincreased, SMI32increased, SOX10increased, Synaptophysinincreased, TMEM119increased, aSMAincreased, iC3Bincreased, vGatincreased, vGlutincreased
    Select objects to measure:Cells

Threshold:[module_num:16|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enabled:False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
    Select the input image:Iba1
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.1
    Upper outlier fraction:0.00
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureImageAreaOccupied:[module_num:17|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enabled:False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
    Measure the area occupied by:Binary Image
    Select binary images to measure:Threshold
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
OverlayOutlines:[module_num:18|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CD20Increased
    Name the output image:CD20celloutline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF0A
    Select objects to display:Cells

OverlayOutlines:[module_num:19|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CD3Increased
    Name the output image:CD3celloutline
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FFFF0A
    Select objects to display:Cells

ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Downloads/iba1intensity
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cells|Intensity_MeanIntensity_CD45
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
